PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age': '', 'gender': "['', 'Male', 'Female', 'Other']", 'country of origin': '', 'do you have any photography or visual art experience?': "['', 'Yes', 'No']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['images/originals_needed/106.jpg', 'images/originals_needed/150.jpg', 'images/originals_needed/162.jpg', 'images/originals_needed/845.jpg', 'images/originals_needed/1837.jpg', 'images/originals_needed/2516.jpg', 'images/originals_needed/2589.jpg', 'images/originals_needed/2892.jpg', 'images/originals_needed/3463.jpg', 'images/originals_needed/3791.jpg', 'images/originals_needed/4374.jpg', 'images/originals_needed/4785.jpg', 'images/originals_needed/5139.jpg', 'images/originals_needed/6864.jpg', 'images/originals_needed/7416.jpg', 'images/originals_needed/7701.jpg', 'images/originals_needed/7867.jpg', 'images/originals_needed/8201.jpg', 'images/originals_needed/8709.jpg', 'images/originals_needed/8791.jpg', 'images/originals_needed/9190.jpg', 'images/originals_needed/9273.jpg', 'images/originals_needed/9425.jpg', 'images/originals_needed/9482.jpg', 'images/originals_needed/9548.jpg', 'images/originals_needed/9580.jpg', 'images/originals_needed/10053.jpg', 'images/originals_needed/10237.jpg', 'images/originals_needed/11120.jpg', 'images/originals_needed/12363.jpg', 'images/originals_needed/12966.jpg', 'images/originals_needed/13275.jpg', 'images/originals_needed/13471.jpg', 'images/originals_needed/13978.jpg', 'images/originals_needed/18921.jpg', 'images/originals_needed/20682.jpg', 'images/originals_needed/20686.jpg', 'images/originals_needed/20771.jpg', 'images/originals_needed/21347.jpg', 'images/originals_needed/21678.jpg', 'images/originals_needed/23375.jpg', 'images/originals_needed/23379.jpg', 'images/originals_needed/23684.jpg', 'images/originals_needed/24102.jpg', 'images/originals_needed/24313.jpg', 'images/originals_needed/24838.jpg', 'images/originals_needed/26634.jpg', 'images/originals_needed/31628.jpg', 'images/originals_needed/32163.jpg', 'images/originals_needed/33625.jpg', 'images/originals_needed/33761.jpg', 'images/originals_needed/35072.jpg', 'images/originals_needed/35182.jpg', 'images/originals_needed/35507.jpg', 'images/originals_needed/44289.jpg', 'images/originals_needed/44321.jpg', 'images/originals_needed/45563.jpg', 'images/originals_needed/46416.jpg', 'images/originals_needed/51974.jpg', 'images/originals_needed/52602.jpg', 'images/originals_needed/55587.jpg', 'images/originals_needed/55938.jpg', 'images/originals_needed/59214.jpg', 'images/originals_needed/60583.jpg', 'images/originals_needed/60588.jpg', 'images/originals_needed/60745.jpg', 'images/originals_needed/62065.jpg', 'images/originals_needed/62168.jpg', 'images/originals_needed/64527.jpg', 'images/originals_needed/70123.jpg', 'images/originals_needed/70160.jpg', 'images/originals_needed/73221.jpg', 'images/originals_needed/74340.jpg', 'images/originals_needed/74403.jpg', 'images/originals_needed/75572.jpg', 'images/originals_needed/80815.jpg', 'images/originals_needed/81685.jpg', 'images/originals_needed/82345.jpg', 'images/originals_needed/85569.jpg', 'images/originals_needed/86213.jpg', 'images/originals_needed/92663.jpg', 'images/originals_needed/93210.jpg', 'images/originals_needed/95217.jpg', 'images/originals_needed/95281.jpg', 'images/originals_needed/96800.jpg', 'images/originals_needed/98088.jpg', 'images/originals_needed/100397.jpg', 'images/originals_needed/104023.jpg', 'images/originals_needed/105190.jpg', 'images/originals_needed/106183.jpg', 'images/originals_needed/106707.jpg', 'images/originals_needed/111547.jpg', 'images/originals_needed/112993.jpg', 'images/originals_needed/118238.jpg', 'images/originals_needed/129910.jpg', 'images/originals_needed/142717.jpg', 'images/originals_needed/146420.jpg', 'images/originals_needed/151108.jpg', 'images/originals_needed/151628.jpg', 'images/originals_needed/152095.jpg', 'images/originals_needed/154133.jpg', 'images/originals_needed/158188.jpg', 'images/originals_needed/161996.jpg', 'images/originals_needed/162251.jpg', 'images/originals_needed/167612.jpg', 'images/originals_needed/170254.jpg', 'images/originals_needed/175666.jpg', 'images/originals_needed/181188.jpg', 'images/originals_needed/182112.jpg', 'images/originals_needed/182657.jpg', 'images/originals_needed/184714.jpg', 'images/originals_needed/187930.jpg', 'images/originals_needed/200460.jpg', 'images/originals_needed/202320.jpg', 'images/originals_needed/202870.jpg', 'images/originals_needed/205140.jpg', 'images/originals_needed/206282.jpg', 'images/originals_needed/210609.jpg', 'images/originals_needed/212523.jpg', 'images/originals_needed/213464.jpg', 'images/originals_needed/219683.jpg', 'images/originals_needed/224501.jpg', 'images/originals_needed/224554.jpg', 'images/originals_needed/230418.jpg', 'images/originals_needed/234535.jpg', 'images/originals_needed/236562.jpg', 'images/originals_needed/244379.jpg', 'images/originals_needed/245934.jpg', 'images/originals_needed/254035.jpg', 'images/originals_needed/257327.jpg', 'images/originals_needed/260639.jpg', 'images/originals_needed/262355.jpg', 'images/originals_needed/267110.jpg', 'images/originals_needed/269775.jpg', 'images/originals_needed/271059.jpg', 'images/originals_needed/271336.jpg', 'images/originals_needed/271488.jpg', 'images/originals_needed/281626.jpg', 'images/originals_needed/282357.jpg', 'images/originals_needed/284583.jpg', 'images/originals_needed/288838.jpg', 'images/originals_needed/297417.jpg', 'images/originals_needed/304135.jpg', 'images/originals_needed/310485.jpg', 'images/originals_needed/311346.jpg', 'images/originals_needed/315045.jpg', 'images/originals_needed/316215.jpg', 'images/originals_needed/316307.jpg', 'images/originals_needed/321020.jpg', 'images/originals_needed/322092.jpg', 'images/originals_needed/324088.jpg', 'images/originals_needed/328322.jpg', 'images/originals_needed/331127.jpg', 'images/originals_needed/332710.jpg', 'images/originals_needed/333630.jpg', 'images/originals_needed/335951.jpg', 'images/originals_needed/338938.jpg', 'images/originals_needed/340665.jpg', 'images/originals_needed/347044.jpg', 'images/originals_needed/354075.jpg', 'images/originals_needed/364795.jpg', 'images/originals_needed/365807.jpg', 'images/originals_needed/375809.jpg', 'images/originals_needed/378166.jpg', 'images/originals_needed/379860.jpg', 'images/originals_needed/382368.jpg', 'images/originals_needed/385155.jpg', 'images/originals_needed/386696.jpg', 'images/originals_needed/391314.jpg', 'images/originals_needed/391422.jpg', 'images/originals_needed/404406.jpg', 'images/originals_needed/404498.jpg', 'images/originals_needed/409812.jpg', 'images/originals_needed/412313.jpg', 'images/originals_needed/421771.jpg', 'images/originals_needed/424359.jpg', 'images/originals_needed/424449.jpg', 'images/originals_needed/432920.jpg', 'images/originals_needed/449235.jpg', 'images/originals_needed/452849.jpg', 'images/originals_needed/460138.jpg', 'images/originals_needed/468444.jpg', 'images/originals_needed/471810.jpg', 'images/originals_needed/477472.jpg', 'images/originals_needed/478531.jpg', 'images/originals_needed/478905.jpg', 'images/originals_needed/490999.jpg', 'images/originals_needed/491369.jpg', 'images/originals_needed/491860.jpg', 'images/originals_needed/493189.jpg', 'images/originals_needed/494261.jpg', 'images/originals_needed/501841.jpg', 'images/originals_needed/502691.jpg', 'images/originals_needed/506212.jpg', 'images/originals_needed/509164.jpg', 'images/originals_needed/509400.jpg', 'images/originals_needed/511442.jpg', 'images/originals_needed/516715.jpg', 'images/originals_needed/524086.jpg', 'images/originals_needed/526883.jpg', 'images/originals_needed/536211.jpg', 'images/originals_needed/538345.jpg', 'images/originals_needed/538845.jpg', 'images/originals_needed/543104.jpg', 'images/originals_needed/550619.jpg', 'images/originals_needed/569876.jpg', 'images/originals_needed/575469.jpg', 'images/originals_needed/575515.jpg', 'images/originals_needed/604740.jpg', 'images/originals_needed/619746.jpg', 'images/originals_needed/623459.jpg', 'images/originals_needed/623645.jpg', 'images/originals_needed/623703.jpg', 'images/originals_needed/624606.jpg', 'images/originals_needed/641334.jpg', 'images/originals_needed/642962.jpg', 'images/originals_needed/649485.jpg', 'images/originals_needed/650596.jpg', 'images/originals_needed/659202.jpg', 'images/originals_needed/669367.jpg', 'images/originals_needed/676523.jpg', 'images/originals_needed/679749.jpg', 'images/originals_needed/683341.jpg', 'images/originals_needed/685066.jpg', 'images/originals_needed/687274.jpg', 'images/originals_needed/693398.jpg', 'images/originals_needed/698076.jpg', 'images/originals_needed/704494.jpg', 'images/originals_needed/710917.jpg', 'images/originals_needed/713942.jpg', 'images/originals_needed/716381.jpg', 'images/originals_needed/721906.jpg', 'images/originals_needed/723297.jpg', 'images/originals_needed/723480.jpg', 'images/originals_needed/725129.jpg', 'images/originals_needed/727495.jpg', 'images/originals_needed/738537.jpg', 'images/originals_needed/739685.jpg', 'images/originals_needed/742675.jpg', 'images/originals_needed/745204.jpg', 'images/originals_needed/745635.jpg', 'images/originals_needed/747175.jpg', 'images/originals_needed/750117.jpg', 'images/originals_needed/758276.jpg', 'images/originals_needed/762843.jpg', 'images/originals_needed/764581.jpg', 'images/originals_needed/769605.jpg', 'images/originals_needed/770297.jpg', 'images/originals_needed/770432.jpg', 'images/originals_needed/771472.jpg', 'images/originals_needed/776681.jpg', 'images/originals_needed/780373.jpg', 'images/originals_needed/782420.jpg', 'images/originals_needed/793952.jpg', 'images/originals_needed/820923.jpg', 'images/originals_needed/821454.jpg', 'images/originals_needed/829060.jpg', 'images/originals_needed/830744.jpg', 'images/originals_needed/831802.jpg', 'images/originals_needed/834679.jpg', 'images/originals_needed/835590.jpg', 'images/originals_needed/835838.jpg', 'images/originals_needed/858475.jpg', 'images/originals_needed/861086.jpg', 'images/originals_needed/862470.jpg', 'images/originals_needed/867694.jpg', 'images/originals_needed/869672.jpg', 'images/originals_needed/874684.jpg', 'images/originals_needed/878987.jpg', 'images/originals_needed/885604.jpg', 'images/originals_needed/899376.jpg', 'images/originals_needed/899548.jpg', 'images/originals_needed/901323.jpg', 'images/originals_needed/903287.jpg', 'images/originals_needed/913046.jpg', 'images/originals_needed/918646.jpg', 'images/originals_needed/941726.jpg', 'images/originals_needed/947347.jpg', 'images/originals_needed/949475.jpg', 'images/originals_needed/952960.jpg', 'images/originals_needed/957023.jpg', 'images/originals_needed/957982.jpg', 'images/generated/106_generated.png', 'images/generated/150_generated.png', 'images/generated/162_generated.png', 'images/generated/845_generated.png', 'images/generated/1837_generated.png', 'images/generated/2516_generated.png', 'images/generated/2589_generated.png', 'images/generated/2892_generated.png', 'images/generated/3463_generated.png', 'images/generated/3791_generated.png', 'images/generated/4374_generated.png', 'images/generated/4785_generated.png', 'images/generated/5139_generated.png', 'images/generated/6864_generated.png', 'images/generated/7416_generated.png', 'images/generated/7701_generated.png', 'images/generated/7867_generated.png', 'images/generated/8201_generated.png', 'images/generated/8709_generated.png', 'images/generated/8791_generated.png', 'images/generated/9190_generated.png', 'images/generated/9273_generated.png', 'images/generated/9425_generated.png', 'images/generated/9482_generated.png', 'images/generated/9548_generated.png', 'images/generated/9580_generated.png', 'images/generated/10053_generated.png', 'images/generated/10237_generated.png', 'images/generated/11120_generated.png', 'images/generated/12363_generated.png', 'images/generated/12966_generated.png', 'images/generated/13275_generated.png', 'images/generated/13471_generated.png', 'images/generated/13978_generated.png', 'images/generated/18921_generated.png', 'images/generated/20682_generated.png', 'images/generated/20686_generated.png', 'images/generated/20771_generated.png', 'images/generated/21347_generated.png', 'images/generated/21678_generated.png', 'images/generated/23375_generated.png', 'images/generated/23379_generated.png', 'images/generated/23684_generated.png', 'images/generated/24102_generated.png', 'images/generated/24313_generated.png', 'images/generated/24838_generated.png', 'images/generated/26634_generated.png', 'images/generated/31628_generated.png', 'images/generated/32163_generated.png', 'images/generated/33625_generated.png', 'images/generated/33761_generated.png', 'images/generated/35072_generated.png', 'images/generated/35182_generated.png', 'images/generated/35507_generated.png', 'images/generated/44289_generated.png', 'images/generated/44321_generated.png', 'images/generated/45563_generated.png', 'images/generated/46416_generated.png', 'images/generated/51974_generated.png', 'images/generated/52602_generated.png', 'images/generated/55587_generated.png', 'images/generated/55938_generated.png', 'images/generated/59214_generated.png', 'images/generated/60583_generated.png', 'images/generated/60588_generated.png', 'images/generated/60745_generated.png', 'images/generated/62065_generated.png', 'images/generated/62168_generated.png', 'images/generated/64527_generated.png', 'images/generated/70123_generated.png', 'images/generated/70160_generated.png', 'images/generated/73221_generated.png', 'images/generated/74340_generated.png', 'images/generated/74403_generated.png', 'images/generated/75572_generated.png', 'images/generated/80815_generated.png', 'images/generated/81685_generated.png', 'images/generated/82345_generated.png', 'images/generated/85569_generated.png', 'images/generated/86213_generated.png', 'images/generated/92663_generated.png', 'images/generated/93210_generated.png', 'images/generated/95217_generated.png', 'images/generated/95281_generated.png', 'images/generated/96800_generated.png', 'images/generated/98088_generated.png', 'images/generated/100397_generated.png', 'images/generated/104023_generated.png', 'images/generated/105190_generated.png', 'images/generated/106183_generated.png', 'images/generated/106707_generated.png', 'images/generated/111547_generated.png', 'images/generated/112993_generated.png', 'images/generated/118238_generated.png', 'images/generated/129910_generated.png', 'images/generated/142717_generated.png', 'images/generated/146420_generated.png', 'images/generated/151108_generated.png', 'images/generated/151628_generated.png', 'images/generated/152095_generated.png', 'images/generated/154133_generated.png', 'images/generated/158188_generated.png', 'images/generated/161996_generated.png', 'images/generated/162251_generated.png', 'images/generated/167612_generated.png', 'images/generated/170254_generated.png', 'images/generated/175666_generated.png', 'images/generated/181188_generated.png', 'images/generated/182112_generated.png', 'images/generated/182657_generated.png', 'images/generated/184714_generated.png', 'images/generated/187930_generated.png', 'images/generated/200460_generated.png', 'images/generated/202320_generated.png', 'images/generated/202870_generated.png', 'images/generated/205140_generated.png', 'images/generated/206282_generated.png', 'images/generated/210609_generated.png', 'images/generated/212523_generated.png', 'images/generated/213464_generated.png', 'images/generated/219683_generated.png', 'images/generated/224501_generated.png', 'images/generated/224554_generated.png', 'images/generated/230418_generated.png', 'images/generated/234535_generated.png', 'images/generated/236562_generated.png', 'images/generated/244379_generated.png', 'images/generated/245934_generated.png', 'images/generated/254035_generated.png', 'images/generated/257327_generated.png', 'images/generated/260639_generated.png', 'images/generated/262355_generated.png', 'images/generated/267110_generated.png', 'images/generated/269775_generated.png', 'images/generated/271059_generated.png', 'images/generated/271336_generated.png', 'images/generated/271488_generated.png', 'images/generated/281626_generated.png', 'images/generated/282357_generated.png', 'images/generated/284583_generated.png', 'images/generated/288838_generated.png', 'images/generated/297417_generated.png', 'images/generated/304135_generated.png', 'images/generated/310485_generated.png', 'images/generated/311346_generated.png', 'images/generated/315045_generated.png', 'images/generated/316215_generated.png', 'images/generated/316307_generated.png', 'images/generated/321020_generated.png', 'images/generated/322092_generated.png', 'images/generated/324088_generated.png', 'images/generated/328322_generated.png', 'images/generated/331127_generated.png', 'images/generated/332710_generated.png', 'images/generated/333630_generated.png', 'images/generated/335951_generated.png', 'images/generated/338938_generated.png', 'images/generated/340665_generated.png', 'images/generated/347044_generated.png', 'images/generated/354075_generated.png', 'images/generated/364795_generated.png', 'images/generated/365807_generated.png', 'images/generated/375809_generated.png', 'images/generated/378166_generated.png', 'images/generated/379860_generated.png', 'images/generated/382368_generated.png', 'images/generated/385155_generated.png', 'images/generated/386696_generated.png', 'images/generated/391314_generated.png', 'images/generated/391422_generated.png', 'images/generated/404406_generated.png', 'images/generated/404498_generated.png', 'images/generated/409812_generated.png', 'images/generated/412313_generated.png', 'images/generated/421771_generated.png', 'images/generated/424359_generated.png', 'images/generated/424449_generated.png', 'images/generated/432920_generated.png', 'images/generated/449235_generated.png', 'images/generated/452849_generated.png', 'images/generated/460138_generated.png', 'images/generated/468444_generated.png', 'images/generated/471810_generated.png', 'images/generated/477472_generated.png', 'images/generated/478531_generated.png', 'images/generated/478905_generated.png', 'images/generated/490999_generated.png', 'images/generated/491369_generated.png', 'images/generated/491860_generated.png', 'images/generated/493189_generated.png', 'images/generated/494261_generated.png', 'images/generated/501841_generated.png', 'images/generated/502691_generated.png', 'images/generated/506212_generated.png', 'images/generated/509164_generated.png', 'images/generated/509400_generated.png', 'images/generated/511442_generated.png', 'images/generated/516715_generated.png', 'images/generated/524086_generated.png', 'images/generated/526883_generated.png', 'images/generated/536211_generated.png', 'images/generated/538345_generated.png', 'images/generated/538845_generated.png', 'images/generated/543104_generated.png', 'images/generated/550619_generated.png', 'images/generated/569876_generated.png', 'images/generated/575469_generated.png', 'images/generated/575515_generated.png', 'images/generated/604740_generated.png', 'images/generated/619746_generated.png', 'images/generated/623459_generated.png', 'images/generated/623645_generated.png', 'images/generated/623703_generated.png', 'images/generated/624606_generated.png', 'images/generated/641334_generated.png', 'images/generated/642962_generated.png', 'images/generated/649485_generated.png', 'images/generated/650596_generated.png', 'images/generated/659202_generated.png', 'images/generated/669367_generated.png', 'images/generated/676523_generated.png', 'images/generated/679749_generated.png', 'images/generated/683341_generated.png', 'images/generated/685066_generated.png', 'images/generated/687274_generated.png', 'images/generated/693398_generated.png', 'images/generated/698076_generated.png', 'images/generated/704494_generated.png', 'images/generated/710917_generated.png', 'images/generated/713942_generated.png', 'images/generated/716381_generated.png', 'images/generated/721906_gener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7_generated.png', 'images/generated/949475_generated.png', 'images/generated/952960_generated.png', 'images/generated/957023_generated.png', 'images/generated/957982_generated.png', 'csv/stimuli.csv']
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = Human Evaluation of Image Similarity Judgments
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Both
      Before JS Experiment:
        ///////////////////////////
        // "Before Experiment" TAB
        ///////////////////////////

        // Declare globals
        var CSV_FILE           = 'csv/stimuli.csv';
        var ORIGINAL_FOLDER    = 'images/originals_needed/';
        var GENERATED_FOLDER   = 'images/generated/';

        var CUSTOM_BINS        = [0.000,0.300,0.400,0.457,0.514,0.571,0.629,0.686,0.743,0.800,1.000];
        var BIN_LABELS         = CUSTOM_BINS.slice(0,-1)
                                    .map((b,i) => b.toFixed(2) + '-' + CUSTOM_BINS[i+1].toFixed(2));

        var NUM_TRIALS         = 282;
        var NUM_REVERSALS      = 6;
        var MIN_TRIALS         = 60;
        var STEPSIZE           = 1;

        // **NEW: trial‐by‐trial state**
        var image1_path    = "";
        var image2_path    = "";
        var info_str       = "";
        var currentRow     = null;

        // Dataframe and bin structures
        var df                  = [];
        var possibleValues      = [];
        var binsToIndices       = {};
        var imgOrderPerBin      = {};
        var usedIdxInBin        = {};
        var usedGlobalIndices   = new Set();

        // Staircase containers
        var staircases, whichStairIndex;
        // NEW: record which staircase we used each trial
        var stairIndices = [];
        // Logging arrays
        var history       = [];
        var responses     = [];
        var reaction_times= [];
        var key_presses   = [];
        var orig_lefts    = [];
        var shownRows     = [];

        // Utility: CSV parser
        function parseCSV(text) {
            let lines   = text.trim().split(/\r?\n/);
            let headers = lines.shift().split(',');
            return lines.map(line => {
                let cols = line.split(',');
                let obj  = {};
                headers.forEach((h,i) => obj[h] = cols[i]);
                obj.clip_similarity = parseFloat(obj.clip_similarity);
                return obj;
            });
        }

        // Utility: Fisher–Yates shuffle
        function shuffle(array) {
            let a = array.slice();
            for (let i = a.length - 1; i > 0; i--) {
                const j = Math.floor(Math.random() * (i + 1));
                [a[i], a[j]] = [a[j], a[i]];
            }
            return a;
        }

        // Load & preprocess CSV
        fetch(CSV_FILE)
          .then(resp => resp.text())
          .then(text => {
            df = parseCSV(text).filter(r => !isNaN(r.clip_similarity));

            // Assign each row to a bin index
            df.forEach((row,i) => {
              for (let j = 0; j < CUSTOM_BINS.length - 1; j++) {
                let low  = CUSTOM_BINS[j],
                    high = CUSTOM_BINS[j+1];
                if ((row.clip_similarity >= low && row.clip_similarity < high) ||
                    (j===CUSTOM_BINS.length-2 && row.clip_similarity===high)) {
                  row.bin = j;
                  break;
                }
              }
            });

            // Collect & sort available bin indexes
            possibleValues = [...new Set(df.map(r=>r.bin))];
            possibleValues.sort((a,b)=>a-b);

            // Build per‐bin index lists, shuffle, cap at 10
           /* for (let b of possibleValues) {
              let allIdx = df
                .map((r,i)=> r.bin===b ? i : -1)
                .filter(i=>i!==-1);
              imgOrderPerBin[b] = shuffle(allIdx).slice(0,10);  // ← cap here
              usedIdxInBin[b]   = 0;
            }*/
            // Build per‐bin index lists and shuffle (no cap)
            for (let b of possibleValues) {
              let allIdx = df
                .map((r,i)=> r.bin===b ? i : -1)
                .filter(i=>i!==-1);
              imgOrderPerBin[b] = shuffle(allIdx);
              usedIdxInBin[b]   = 0;
            }

            // Create two staircases
            function makeStair(startHigh) {
              let startIdx = startHigh
                ? possibleValues.indexOf(Math.max(...possibleValues))
                : possibleValues.indexOf(Math.min(...possibleValues));
              return {
                currentIndex:    startIdx,
                currentBin:      possibleValues[startIdx],
                prevResponse:    null,
                reversalIndices: [],
                trialCount:      0,
                finished:        false
              };
            }
            staircases      = [ makeStair(false), makeStair(true) ];
            whichStairIndex = 0;
        });
      Begin Experiment:
        import pandas as pd
        import random
        import uuid

        CSV_FILE = 'csv/stimuli.csv'
        ORIGINAL_FOLDER = 'images/originals_needed'
        GENERATED_FOLDER = 'images/generated'
        RESULTS_DIR = 'evaluation_results'
        if not os.path.exists(RESULTS_DIR):
            os.makedirs(RESULTS_DIR)

        CUSTOM_BINS = [0.00, 0.40, 0.45, 0.50, 0.55, 0.60, 0.65, 0.70, 0.75, 0.80, 1.00]
        BIN_LABELS = [f"{CUSTOM_BINS[i]:.2f}-{CUSTOM_BINS[i+1]:.2f}" for i in range(len(CUSTOM_BINS)-1)]

        NUM_TRIALS = 190
        NUM_REVERSAL_TRIALS = 3
        MINIMUM_NUM_TRIALS = 6
        STEPSIZE = 1

        df = pd.read_csv(CSV_FILE)
        df = df.dropna(subset=['clip_similarity'])
        df['bin'] = -1
        for i in range(len(CUSTOM_BINS)-1):
            if i == len(CUSTOM_BINS)-2:
                mask = (df['clip_similarity'] >= CUSTOM_BINS[i]) & (df['clip_similarity'] <= CUSTOM_BINS[i+1])
            else:
                mask = (df['clip_similarity'] >= CUSTOM_BINS[i]) & (df['clip_similarity'] < CUSTOM_BINS[i+1])
            df.loc[mask, 'bin'] = i
        all_bin_ids = sorted(df['bin'].unique())
        all_bin_ids = [b for b in all_bin_ids if b >= 0]
        bins_to_indices = {i: df.index[df['bin'] == i].tolist() for i in range(len(CUSTOM_BINS)-1)}

        possible_values = all_bin_ids
        init_bin = min(all_bin_ids)
        current_index = possible_values.index(init_bin)
        current_bin = possible_values[current_index]
        history = []
        responses = []
        reaction_times = []
        key_presses = []
        orig_lefts = []
        reversal_indices = []
        prev_response = None
        trial_idx = 0
        is_finished = False
        random.seed()
        img_order_per_bin = {k: random.sample(v, len(v)) for k,v in bins_to_indices.items()}
        used_idx_in_bin = {k: 0 for k in bins_to_indices}
        used_global_indices = set()
        user_age = expInfo['age']
        user_gender = expInfo['gender']
        user_id = str(uuid.uuid4())[:6]
      Begin JS Routine:
        ///////////////////////
        // "Begin Routine" TAB
        ///////////////////////

        // Reset resize flag
        image1Resized = false;

        // Select the active staircase
        var sc = staircases[whichStairIndex];
        currentIndex = sc.currentIndex;   // for legacy code below
        currentBin   = sc.currentBin;

        // Build list of candidate bins (staircase‐style expanding)
        let candidateBins = [ currentBin ];
        let max_offset    = Math.max(...possibleValues.map(b => Math.abs(b - currentBin)));
        for (let offset = 1; offset <= max_offset; offset++) {
          let down = currentBin - offset,
              up   = currentBin + offset;
          if (possibleValues.includes(down)) candidateBins.push(down);
          if (possibleValues.includes(up))   candidateBins.push(up);
        }

        // Find a new unused image index from these bins
        let found = false, img_idx;
        for (let b of candidateBins) {
          let idxs = imgOrderPerBin[b] || [];
          while (usedIdxInBin[b] < idxs.length) {
            img_idx = idxs[ usedIdxInBin[b]++ ];
            if (!usedGlobalIndices.has(img_idx)) {
              usedGlobalIndices.add(img_idx);
              found = true;
              break;
            }
          }
          if (found) break;
        }

        // If no image found, mark this staircase finished
        if (!found || img_idx === undefined || !df[img_idx]) {
          sc.finished = true;

          // If both staircases are done, end the loop
          if (staircases.every(s => s.finished)) {
            trials.finished = true;
          }
          continueRoutine = false;
          currentRow      = null;
        }
        else {
          // Otherwise set up the trial normally
          currentRow = df[img_idx];
          shownRows.push(currentRow);

          let origPath = ORIGINAL_FOLDER + currentRow.original_image;
          let genPath  = GENERATED_FOLDER  + currentRow.generated_image;
          let origLeft = Math.random() < 0.5;

          image1_path = origLeft ? origPath : genPath;
          image2_path = origLeft ? genPath  : origPath;

          //info_str = `Bin: ${BIN_LABELS[currentRow.bin]} | Similarity: ${currentRow.clip_similarity.toFixed(3)} | Trial ${sc.trialCount+1}`;
        }
      Begin Routine:
        # --- Pick next available image pair from current bin (search nearby bins if needed)
        candidate_bins = [current_bin]
        bin_range = possible_values
        max_offset = max(abs(b - current_bin) for b in bin_range)
        for offset in range(1, max_offset+1):
            down = current_bin - offset
            up = current_bin + offset
            if down in bin_range: candidate_bins.append(down)
            if up in bin_range: candidate_bins.append(up)
        found_img = False
        for try_bin in candidate_bins:
            idxs = img_order_per_bin.get(try_bin, [])
            while used_idx_in_bin.get(try_bin, 0) < len(idxs):
                img_idx = idxs[used_idx_in_bin[try_bin]]
                used_idx_in_bin[try_bin] += 1
                if img_idx not in used_global_indices:
                    found_img = True
                    break
            if found_img:
                break
        if not found_img:
            continueRoutine = False
            trials.finished = True
            is_finished = True
        else:
            used_global_indices.add(img_idx)
            row = df.loc[img_idx]
            orig_path = os.path.join(ORIGINAL_FOLDER, row['original_image'])
            gen_path = os.path.join(GENERATED_FOLDER, row['generated_image'])
            orig_left = random.choice([True, False])
            if orig_left:
                image1_path = orig_path
                image2_path = gen_path
            else:
                image1_path = gen_path
                image2_path = orig_path
            info_str = f"Bin: {BIN_LABELS[int(row['bin'])]}   |   Similarity: {row['clip_similarity']:.3f}   |   Trial {trial_idx+1}"
      Each JS Frame:
        ////////////////////
        // "Each Frame" TAB
        ////////////////////

        // Helper to scale images
        function scaleToFitBox(imgComponent, targetSize=[0.5,0.5]) {
          if (!imgComponent._image ||
              !imgComponent._image.complete ||
              imgComponent._image.naturalWidth === 0) {
            return;
          }
          let iw = imgComponent._image.naturalWidth,
              ih = imgComponent._image.naturalHeight,
              boxW = targetSize[0],
              boxH = targetSize[1],
              imageAspect = iw/ih,
              boxAspect   = boxW/boxH;

          if (imageAspect > boxAspect) {
            imgComponent.size = [ boxW, boxW/imageAspect ];
          } else {
            imgComponent.size = [ boxH*imageAspect, boxH ];
          }
        }

        if (!image1Resized && image1._image && image2._image) {
          scaleToFitBox(image1, [0.5,0.5]);
          scaleToFitBox(image2, [0.5,0.5]);
          image1Resized = true;
        }
      End Experiment:
        results = []
        for i in range(trial_idx):
            results.append([
                user_age, user_gender,
                df.iloc[i]['original_image'],
                df.iloc[i]['generated_image'],
                df.iloc[i]['clip_similarity'],
                history[i] if i < len(history) else '',
                'Similar' if responses[i] == 1 else 'Not Similar' if responses[i] == 0 else 'NoResp',
                reaction_times[i] if i < len(reaction_times) else '',
                i+1,
                orig_lefts[i] if i < len(orig_lefts) else '',
                key_presses[i] if i < len(key_presses) else ''
            ])
        results_headers = ['Age','Gender','OriginalImage','GeneratedImage','CLIPCosineSimilarity','Bin','Response','ReactionTime','Trial','OrigOnLeft','KeyPressed']
        output_csv = os.path.join(RESULTS_DIR, f"results_{user_id}.csv")
        import pandas as pd
        pd.DataFrame(results, columns=results_headers).to_csv(output_csv, index=False)
      End JS Experiment:
        ///////////////////////////
        // "End Experiment" TAB
        ///////////////////////////

        // Write out all trial‐wise data
        for (let i = 0; i < shownRows.length; i++) {
          psychoJS.experiment.addData("staircase", stairIndices[i]);
          psychoJS.experiment.addData("original_image",    shownRows[i].original_image);
          psychoJS.experiment.addData("generated_image",   shownRows[i].generated_image);
          psychoJS.experiment.addData("clip_similarity",   shownRows[i].clip_similarity);
          psychoJS.experiment.addData("response",          responses[i]);
          psychoJS.experiment.addData("reaction_time",     reaction_times[i]);
          psychoJS.experiment.addData("key_pressed",       key_presses[i]);
          psychoJS.experiment.addData("original_left",     orig_lefts[i]);
          psychoJS.experiment.nextEntry();
        }

        // Add the questionnaire/ranking summary if present
        if (window.rankingData) {
          psychoJS.experiment.addData("trial_type",    "ranking_summary");
          psychoJS.experiment.addData("ranking_order", window.rankingData.ranking_order);
          psychoJS.experiment.addData("ranking_count", window.rankingData.ranking_count);

          Object.keys(window.rankingData).forEach(key => {
            if (key.startsWith('factor_')) {
              psychoJS.experiment.addData(key, window.rankingData[key]);
            }
          });
          psychoJS.experiment.nextEntry();
        }
      End JS Routine:
        ////////////////////
        // "End Routine" TAB
        ////////////////////

        let resp = null, kp='none', rt='';

        // Gather keyboard or mouse response as before
        if (key_resp.keys) {
          let kl = Array.isArray(key_resp.keys) ? key_resp.keys : [key_resp.keys];
          if (kl.includes('right') || kl.includes('d')) {
            resp = 1; kp = kl.slice(-1)[0];
          } else if (kl.includes('left') || kl.includes('a')) {
            resp = 0; kp = kl.slice(-1)[0];
          }
          rt = Array.isArray(key_resp.rt) ? (key_resp.rt.slice(-1)[0] || '') : key_resp.rt;
        }
        else if (mouse_resp.clicked_name) {
          if (mouse_resp.clicked_name.includes('btn_sim'))     { resp = 1; kp = 'mouse_sim'; }
          else if (mouse_resp.clicked_name.includes('btn_notsim')) { resp = 0; kp = 'mouse_notsim'; }
          rt = (mouse_resp.times && mouse_resp.times.length)
               ? mouse_resp.times.slice(-1)[0]
               : '';
        }

        if (currentRow) {
          // Log global history
          history.push(currentRow.bin);
          responses.push(resp);
          reaction_times.push(rt);
          key_presses.push(kp);
          orig_lefts.push(image1_path.includes(currentRow.original_image));

          // Update the active staircase
          var sc = staircases[whichStairIndex];
          sc.trialCount++;

          // reversal detection
          if (sc.prevResponse !== null && sc.prevResponse !== resp) {
            sc.reversalIndices.push(sc.trialCount - 1);
          }
          sc.prevResponse = resp;

          // staircase step
          if (resp === 0) {
            sc.currentIndex = Math.min(sc.currentIndex + STEPSIZE, possibleValues.length - 1);
          } else {
            sc.currentIndex = Math.max(sc.currentIndex - STEPSIZE, 0);
          }
          sc.currentBin = possibleValues[ sc.currentIndex ];

          // finish criterion
          /*if (sc.reversalIndices.length >= NUM_REVERSALS &&
              sc.trialCount       >= MIN_TRIALS) {
            sc.finished = true;
          }*/
          if (sc.reversalIndices.length >= NUM_REVERSALS) {
            sc.finished = true;
          }

          // alternate staircases
          //whichStairIndex = 1 - whichStairIndex;
          // RECORD which staircase this was
          stairIndices.push(whichStairIndex);
          // now alternate to the other staircase
          whichStairIndex = 1 - whichStairIndex;

          /*// if both done, end loop
          if (staircases.every(s => s.finished)) {
            trials.finished = true;
          }*/
            // now check overall stop: both staircases reversed enough AND total trials ≥ MIN_TRIALS
          const bothReversed = staircases.every(s => s.reversalIndices.length >= NUM_REVERSALS);
          const totalTrials  = staircases.reduce((sum, s) => sum + s.trialCount, 0);
          if (bothReversed && totalTrials >= MIN_TRIALS) {
            trials.finished = true;
          }

        }
      End Routine:
        resp = None
        kp = None
        rt = None
        # --- Check keyboard first
        if key_resp.keys:
            # key_resp.keys is a list if Force end of Routine is OFF, else a string if ON
            # key_resp.rt is a float if Force end of Routine is ON, else a list
            # Handle both
            key_list = key_resp.keys if isinstance(key_resp.keys, list) else [key_resp.keys]
            if 'right' in key_list or 'd' in key_list:
                resp = 1
                kp = key_list[-1]
            elif 'left' in key_list or 'a' in key_list:
                resp = 0
                kp = key_list[-1]
            if isinstance(key_resp.rt, list):
                rt = key_resp.rt[-1] if key_resp.rt else ''
            else:
                rt = key_resp.rt

        # --- Mouse response
        elif mouse_resp.clicked_name:
            if 'btn_sim' in mouse_resp.clicked_name:
                resp = 1
                kp = 'mouse_sim'
            elif 'btn_notsim' in mouse_resp.clicked_name:
                resp = 0
                kp = 'mouse_notsim'
            rt = mouse_resp.times[-1] if hasattr(mouse_resp, 'times') and mouse_resp.times else ''
        else:
            resp = None
            kp = 'none'
            rt = ''

        # Log
        history.append(row['bin'])
        responses.append(resp)
        reaction_times.append(rt)
        key_presses.append(kp)
        orig_lefts.append(orig_left)
        trial_idx += 1

        # --- STAIRCASE LOGIC ---
        if prev_response is not None and resp is not None and prev_response != resp:
            reversal_indices.append(trial_idx-1)
        prev_response = resp
        if resp == 1:
            current_index = min(current_index + STEPSIZE, len(possible_values)-1)
        elif resp == 0:
            current_index = max(current_index - STEPSIZE, 0)
        current_bin = possible_values[current_index]

        if len(reversal_indices) >= NUM_REVERSAL_TRIALS and trial_idx >= MINIMUM_NUM_TRIALS:
            is_finished = True
            trials.finished = True
    ImageComponent image1
      image [set every repeat] = $image1_path
      pos = (-0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    ImageComponent image2
      image [set every repeat] = $image2_path
      pos = (0.3, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      units = height
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    TextComponent trial_info_str
      letterHeight = 0.03
      pos = (0, +0.3)
      startVal [time (s)] = 0.0
      text [set every repeat] = $info_str
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    MouseComponent mouse_resp
      clickable = $[btn_sim, btn_notsim]
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent User_guide
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = From Keybaord: Not Similar (←), Similar (→)
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    KeyboardComponent key_resp
      allowedKeys = 'a','d','left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ButtonComponent btn_notsim
      bold = False
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (-0.3, -0.4)
      size = (0.3, 0.08)
      startVal [time (s)] = 0
      text = Not Similar
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    ButtonComponent btn_sim
      bold = False
      forceEndRoutine = True
      letterHeight = 0.03
      pos = (+0.3, -0.4)
      size = (0.3, 0.08)
      startVal [time (s)] = 0
      text = Similar
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  Routine UserInfo
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please answer the following questions.
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  Routine Welcome
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    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        In each trial you’ll see two images side by side. Your task is to decide whether they’re Similar or Not Similar.

        Mouse: click the “Similar” or “Not Similar” button

        Keyboard: press → for Similar, ← for Not Similar

        When you’re ready, press SPACE (desktop) or tap anywhere on the screen (mobile) to begin.
    KeyboardComponent key_resp_welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    MouseComponent mouse_continue
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine thank_you
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you
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  Routine Questionaire
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    CodeComponent ranking
      Code Type = Both
      Begin JS Experiment:
        // =============================================================================
        // BEGIN EXPERIMENT TAB
        // =============================================================================
        // Initialize global variables for questionnaire
        window.rankingComplete = false;
        window.selectedItems = [];
        window.rankingContainer = null;
      Begin JS Routine:
        // =============================================================================
        // BEGIN ROUTINE TAB
        // =============================================================================

        // Reset questionnaire variables for this routine
        window.rankingComplete = false;
        window.selectedItems = [];
        window.rankingContainer = null;

        // Define the ranking options
        var rankingOptions = [
            "Color and Texture",
            "Contrast and Sharpness",
            "Cleanliness and Distortion",
            "Composition",
            "Object Identification",
            "Scene Category",
            "Emotional Tone",
            "Story Context",
            "Relative Position of Elements"
        ];
        var rankingDescriptions = {
            "Color and Texture": "Refers to the surface quality and visual texture as well as color palette and hue relationships.",
            "Contrast and Sharpness": "How well-defined the edges and differences in luminance or color are in the image.",
            "Cleanliness and Distortion": "Amount of visual grain or pixel-level artifacts in the image.",
            "Composition": "Arrangement of visual elements including balance, alignment, and framing.",
            "Object Identification": "Ease with which objects in the image can be recognized or named.",
            "Scene Category": "General type or theme of the image (e.g., landscape, indoor, street).",
            "Emotional Tone": "Mood conveyed by the image (e.g., calm, eerie, joyful).",
            "Story Context": "Whether the image suggests a narrative or situation.",
            "Relative Position of Elements": "Spatial relationships between objects or parts of the image."
        };
        // Function to create the ranking interface
        function createRankingInterface() {
            // Create main container
            rankingContainer = document.createElement('div');
            rankingContainer.id = 'rankingContainer';
            rankingContainer.style.cssText = `
                position: fixed;
                top: 50%;
                left: 50%;
                transform: translate(-50%, -50%);
                width: 90%;
                max-width: 800px;
                height: 80vh;
                background: white;
                border: 2px solid #333;
                border-radius: 10px;
                padding: 20px;
                box-shadow: 0 4px 20px rgba(0,0,0,0.3);
                font-family: Arial, sans-serif;
                overflow-y: auto;
                z-index: 1000;
            `;

            // Create title
            var title = document.createElement('h2');
            title.textContent = 'What Influenced Your Choice?';
            title.style.cssText = `
                margin: 0 0 20px 0;
                text-align: center;
                color: #333;
                font-size: 24px;
            `;

            // Create instructions
            var instructions = document.createElement('p');
            instructions.innerHTML = `
                <strong>Instructions:</strong> Please check the boxes below to select the factors that influenced your image similarity judgments, in order of importance.
                Items will appear in your ranking list in the order you select them. You can uncheck items to remove them.
            `;
            instructions.style.cssText = `
                margin-bottom: 20px;
                color: #555;
                line-height: 1.4;
            `;

            // Create checkbox container
            var checkboxContainer = document.createElement('div');
            checkboxContainer.style.cssText = `
                display: grid;
                grid-template-columns: repeat(auto-fit, minmax(250px, 1fr));
                gap: 10px;
                margin-bottom: 30px;
                padding: 15px;
                background: #f8f9fa;
                border-radius: 8px;
            `;

            // Create checkboxes
            rankingOptions.forEach(function(option, index) {
                var checkboxDiv = document.createElement('div');
                checkboxDiv.style.cssText = `
                    display: flex;
                    align-items: center;
                    padding: 8px;
                    background: white;
                    border-radius: 5px;
                    border: 1px solid #ddd;
                    cursor: pointer;
                    transition: background-color 0.2s;
                `;

                var checkbox = document.createElement('input');
                checkbox.type = 'checkbox';
                checkbox.id = 'ranking_' + index;
                checkbox.value = option;
                checkbox.style.cssText = `
                    margin-right: 10px;
                    transform: scale(1.2);
                    cursor: pointer;
                `;

                var label = document.createElement('label');
                label.textContent = option;
                label.htmlFor = 'ranking_' + index;
                label.style.cssText = `
                    cursor: pointer;
                    font-size: 14px;
                    user-select: none;
                `;
                label.title = rankingDescriptions[option];
                // Add click handlers
                function toggleSelection() {
                    if (checkbox.checked) {
                        if (selectedItems.indexOf(option) === -1) {
                            selectedItems.push(option);
                            updateRankingDisplay();
                        }
                    } else {
                        var idx = selectedItems.indexOf(option);
                        if (idx > -1) {
                            selectedItems.splice(idx, 1);
                            updateRankingDisplay();
                        }
                    }
                }

                checkbox.addEventListener('change', toggleSelection);
                checkboxDiv.addEventListener('click', function(e) {
                    if (e.target !== checkbox) {
                        checkbox.checked = !checkbox.checked;
                        toggleSelection();
                    }
                });

                // Hover effects
                checkboxDiv.addEventListener('mouseenter', function() {
                    checkboxDiv.style.backgroundColor = '#e3f2fd';
                });
                checkboxDiv.addEventListener('mouseleave', function() {
                    checkboxDiv.style.backgroundColor = 'white';
                });

                checkboxDiv.appendChild(checkbox);
                checkboxDiv.appendChild(label);
                checkboxContainer.appendChild(checkboxDiv);
            });

            // Create ranking display section
            var rankingSection = document.createElement('div');
            rankingSection.style.cssText = `margin-bottom: 20px;`;

            var rankingTitle = document.createElement('h3');
            rankingTitle.textContent = 'Your Current Ranking:';
            rankingTitle.style.cssText = `
                margin: 0 0 10px 0;
                color: #333;
                font-size: 18px;
            `;

            var rankingList = document.createElement('ol');
            rankingList.id = 'rankingList';
            rankingList.style.cssText = `
                background: #f0f8ff;
                padding: 15px 15px 15px 35px;
                border-radius: 8px;
                border: 2px dashed #2196F3;
                min-height: 100px;
                color: #333;
                font-size: 16px;
                line-height: 1.6;
            `;

            // Create submit button
            var submitButton = document.createElement('button');
            submitButton.textContent = 'Continue to Complete';
            submitButton.style.cssText = `
                width: 100%;
                padding: 15px;
                background: #4CAF50;
                color: white;
                border: none;
                border-radius: 8px;
                font-size: 18px;
                font-weight: bold;
                cursor: pointer;
                transition: background-color 0.3s;
            `;

            submitButton.addEventListener('mouseenter', function() {
                submitButton.style.backgroundColor = '#45a049';
            });
            submitButton.addEventListener('mouseleave', function() {
                submitButton.style.backgroundColor = '#4CAF50';
            });

            submitButton.addEventListener('click', function() {
                // Store ranking data globally
                window.rankingData = {
                    ranking_order: selectedItems.join(','),
                    ranking_count: selectedItems.length,
                    individual_ranks: {}
                };

                // Store individual rankings
                selectedItems.forEach(function(item, index) {
                    window.rankingData.individual_ranks['rank_' + (index + 1)] = item;
                });

                // Store all factors with their ranks (0 if not selected)
                var allFactors = [
                    "Color and Texture", "Contrast and Sharpness", "Cleanliness and Distortion", "Composition", "Object Identification",
                    "Scene Category", "Emotional Tone", "Story Context", "Relative Position of Elements"
                ];

                allFactors.forEach(function(factor) {
                    var rank = selectedItems.indexOf(factor) + 1;
                    var key = 'factor_' + factor.replace(/\s+/g, '_').toLowerCase();
                    window.rankingData[key] = rank > 0 ? rank : 0;
                });

                // Clean up and continue
                if (rankingContainer && rankingContainer.parentNode) {
                    rankingContainer.parentNode.removeChild(rankingContainer);
                }
                document.body.style.overflow = 'auto';
                rankingComplete = true;
                continueRoutine = false;
            });

            // Function to update ranking display
            window.updateRankingDisplay = function() {
                var rankingListElement = document.getElementById('rankingList');
                if (!rankingListElement) return;

                rankingListElement.innerHTML = '';

                if (selectedItems.length === 0) {
                    var emptyMessage = document.createElement('li');
                    emptyMessage.textContent = 'No items selected yet. Check boxes above to add items to your ranking.';
                    emptyMessage.style.cssText = `
                        color: #999;
                        font-style: italic;
                        list-style: none;
                    `;
                    rankingListElement.appendChild(emptyMessage);
                } else {
                    selectedItems.forEach(function(item, index) {
                        var listItem = document.createElement('li');
                        listItem.textContent = item;
                        listItem.style.cssText = `
                            margin-bottom: 5px;
                            padding: 5px;
                            background: white;
                            border-radius: 4px;
                            border-left: 4px solid #2196F3;
                        `;
                        rankingListElement.appendChild(listItem);
                    });
                }
            };

            // Assemble the interface
            rankingContainer.appendChild(title);
            rankingContainer.appendChild(instructions);
            rankingContainer.appendChild(checkboxContainer);
            rankingContainer.appendChild(rankingSection);
            rankingSection.appendChild(rankingTitle);
            rankingSection.appendChild(rankingList);
            rankingContainer.appendChild(submitButton);

            // Add to page
            document.body.appendChild(rankingContainer);
            document.body.style.overflow = 'hidden';

            // Initialize display
            updateRankingDisplay();
        }

        // Create the interface when routine starts
        createRankingInterface();
      Each JS Frame:
        // =============================================================================
        // EACH FRAME TAB
        // =============================================================================

        // Check if ranking is complete
        if (rankingComplete) {
            continueRoutine = false;
        }
      End JS Routine:
        // =============================================================================
        // END ROUTINE TAB
        // =============================================================================

        // Clean up if routine ends unexpectedly
        if (rankingContainer && rankingContainer.parentNode) {
            rankingContainer.parentNode.removeChild(rankingContainer);
            document.body.style.overflow = 'auto';
        }
    ImageComponent dummy
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Consent
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    TextComponent consentText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Consent to Participate in Research

        You are invited to take part in a research study that investigates how people perceive similarity between images. In this study, you will be shown pairs of images and asked to judge their similarity. Afterward, you will be asked to rate which visual or semantic factors influenced your decisions.

        The study will also collect basic demographic information such as your age and gender. Your responses will be stored anonymously and used only for research purposes.

        Participation is voluntary, and you may withdraw at any time without any penalty. Your data will be kept confidential and used solely for academic analysis and potential publication.

        By checking the box below and continuing, you indicate that:
        - You are at least 18 years old
        - You understand the nature of the study
        - You agree to participate voluntarily

        If you do not agree, please close the browser window now.
  Routine ConsentForm
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    CodeComponent ConsentCode
      Code Type = JS
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      Begin JS Routine:
        // Set flag to block continuation until consent is given
        window.userConsented = false;
        continueRoutine = true;

        // Create container
        const consentBox = document.createElement('div');
        consentBox.id = 'consentBox';
        consentBox.style.cssText = `
          position: fixed;
          top: 50%;
          left: 50%;
          transform: translate(-50%, -50%);
          width: 90%;
          max-width: 800px;
          background: #fff;
          border: 2px solid #333;
          border-radius: 10px;
          padding: 30px;
          box-shadow: 0 4px 15px rgba(0,0,0,0.2);
          font-family: Arial, sans-serif;
          z-index: 1000;
          overflow-y: auto;
          max-height: 80vh;
        `;

        // Consent text
        const consentText = document.createElement('p');
        consentText.innerHTML = `
          <strong>Consent Form</strong><br><br>

        You are invited to participate in a research study on how people perceive visual similarity between images. This study is part of an academic project investigating human aesthetic preferences and visual cognition.<br><br>

        Participation involves viewing image pairs and making similarity judgments, followed by a short set of demographic questions (including age, gender, country of origin, and any background in photography or visual arts).<br><br>

        Your participation is entirely voluntary, and you may withdraw at any time without penalty. No personally identifiable information (such as your name or contact details) will be collected. All responses will be stored securely and analyzed only in anonymized form.<br><br>

        This research complies with the General Data Protection Regulation (GDPR) and institutional data privacy policies. Data will be used exclusively for academic research and not shared beyond the research team.<br><br>

        By checking the box below, you confirm that:
        <ul>
          <li>You are at least 18 years old</li>
          <li>You understand the purpose and procedures of this study</li>
          <li>You consent to participate voluntarily</li>
        </ul>

        Thank you for your contribution to this research. Click "I agree" if you consent.
        `;
        consentText.style.cssText = `
          font-size: 16px;
          margin-bottom: 20px;
        `;

        // Checkbox
        const consentCheckbox = document.createElement('input');
        consentCheckbox.type = 'checkbox';
        consentCheckbox.id = 'consentCheckbox';
        consentCheckbox.style.marginRight = '10px';

        const checkboxLabel = document.createElement('label');
        checkboxLabel.textContent = 'I agree to participate in this study.';
        checkboxLabel.htmlFor = 'consentCheckbox';

        // Continue button (initially disabled)
        const continueBtn = document.createElement('button');
        continueBtn.textContent = 'Continue';
        continueBtn.disabled = true;  // ← DISABLED by default
        continueBtn.style.cssText = `
          display: block;
          margin-top: 20px;
          padding: 10px 20px;
          background: #4CAF50;
          color: white;
          border: none;
          border-radius: 6px;
          font-size: 16px;
          cursor: not-allowed;
          opacity: 0.5;
        `;

        // Enable button when checkbox is checked
        consentCheckbox.addEventListener('change', function () {
          if (consentCheckbox.checked) {
            continueBtn.disabled = false;
            continueBtn.style.cursor = 'pointer';
            continueBtn.style.opacity = '1';
          } else {
            continueBtn.disabled = true;
            continueBtn.style.cursor = 'not-allowed';
            continueBtn.style.opacity = '0.5';
          }
        });

        // Continue action
        continueBtn.onclick = function () {
          window.userConsented = true;
          const el = document.getElementById('consentBox');
          if (el && el.parentNode) el.parentNode.removeChild(el);
          document.body.style.overflow = 'auto';
        };

        // Assemble UI
        consentBox.appendChild(consentText);
        consentBox.appendChild(consentCheckbox);
        consentBox.appendChild(checkboxLabel);
        consentBox.appendChild(continueBtn);
        document.body.appendChild(consentBox);
        document.body.style.overflow = 'hidden';
      Each JS Frame:
        // Prevent continuation until user consents
        if (window.userConsented) {
          continueRoutine = false;
        }
      End JS Routine:
        const el = document.getElementById('consentBox');
        if (el && el.parentNode) el.parentNode.removeChild(el);
        document.body.style.overflow = 'auto';
    TextComponent text_5
      letterHeight = 0.05
      opacity = 0
      startVal [time (s)] = 0.0
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  Routine test
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Any text

        including line breaks
Flow
  Routine ConsentForm
  Routine Welcome
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('dummy', 1)])]
    isTrials = False
    loopType = random
    nReps = 190
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    Routine trial
  LoopTerminator trials
  Routine Questionaire
  Routine thank_you
